PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = BR_Current
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press 'space' to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    TextComponent Visualization
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine Cue
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    TextComponent CueText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $cue
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  Routine BR
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    ImageComponent BRimages
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent key_resp_4
      allowedKeys = 'a','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine PQuestion
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  Routine ProbeQ
    TextComponent ProbeRespIns
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which, if any, squares dissappeared?
        'w'= top square
        's'= bottom square
        'space'= both squares were present
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    KeyboardComponent key_resp_2
      allowedKeys = 'w','s','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DomQ
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    TextComponent DominanceIns
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which grating was dominant?
        'a'= left leaning
        'd'= right leaning
        'space'= miixed dominance
    KeyboardComponent key_resp_3
      allowedKeys = 'a','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Probe
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    ImageComponent ProbeImage
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BR_Excel.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'image': 'images/Practice_Gabor_copy.png', 'cue': 'R'},
      {'image': 'images/Practice_Gabor_copy.png', 'cue': 'G'}]
    Routine Cue
    Routine Blank
    Routine BR
    Routine Probe
    Routine ProbeQ
  LoopTerminator trials
